PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '0'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [2560, 1440]
  color = 1.0000, 1.0000, 1.0000
  expName = EMS-TMR_encodingv1
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine instructions_part2
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    TextComponent instructions
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        Willkommen bei der zweiten Aufgabe des Experiments.

        Hier werden dir Word-Bild Paare präsentiert, wobei dir das Word vorgespielt und das Bild im Anschluss visuell präsentiert wird. Deine Aufgabe ist es, sich die Word-Bild Paare bestmöglichst zu merken.  Versuche aufmerksam zu bleiben! Deine Lernleistung wird im Anschluss abgefragt werden.

        Drücke eine beliebige Taste um fortzufahren.
    KeyboardComponent key_resp
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instructions = """ Welcome to the second task of the experiment.
            Here you will be presented with word-image pairs, whereby the word is played to you and the image is then presented visually. Your task is to memorize the word-picture pairs as best you can.  Try to stay attentive! Your learning performance will be tested afterwards.
           Press any key to continue."""
  Routine fixation_cross
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    TextComponent cross
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = X
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  Routine image_stimuli
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    ImageComponent encoding_img
      image = stimuli/dog/dog001.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        df_trial = df_encoding.iloc[i_encoding]
        print (df_trial)


        encoding_img.image = "stimuli/" + df_trial.image

        # set the break conditional to true to display a break
        n_break_conditional = int(i_block in breaks_after_block) # i_block in break_after_block FALSE/TRUE als int 1 oder 0
      End Routine:
        i_encoding+=1
  Routine word_stimuli
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        df_trial = df_encoding.iloc[i_encoding]
        print (df_trial)

        #unterschiedliche Verben je nach Trial
        encoding_word.setSound("stimuli/sounds/de_" + df_trial.word + ".mp3")
        print (df_trial.word)
        encoding_word.play() # play the sound
      End Routine:
        encoding_word.stop()
    SoundComponent encoding_word
      sound [set every repeat] = $"stimuli/sounds/de_" + df_trial.word + ".mp3"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine feedback_practice
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if false_alarms==0 and misses==0:
            localizer_repetition.finished=True
            feedback_string = 'Gratuliere, Sie haben alles richtig gemacht!\n\n'
            feedback_string += 'Es geht nun weiter mit dem tatsächlichen Experiment.\n\n'
            feedback_string += 'Bitte drücken Sie eine Taste um fortzufahren.'
            text_feedback.text = feedback_string
        else:
            feedback_string = ''
            if misses:
                feedback_string += f'Sie haben  sich bei 2 Paaren kein mentales Bild gemacht.\n'
            if false_alarms:
                feedback_string += f'Sie haben {false_alarms}x an der falschen  Stelle gedrückt.\n'
            feedback_string += '\n\nDrücken Sie nur eine Taste, wenn ein Bild falsch herum ist. '
            feedback_string += 'Falls Sie Fragen haben, stellen Sie diese gerne dem Experimentleiter.\n'
            feedback_string += '\nDrücken Sie eine beliebige Taste um die Übung zu wiederholen.'
            text_feedback.text = feedback_string

            # reset counters
            i_localizer = 0
            false_alarms = 0
            misses = 0
    KeyboardComponent key_resp_2
      allowedKeys = 'y', 'g', 'b', 'r'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_feedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = dummy...somethign went wrong
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  Routine instruction_end
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    TextComponent text
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        Super, du hast nun alle 128 Word-Bild Paare gesehen und versucht, dir so viele wie möglich zu merken, indem du dir jeweils ein mentales Bild des Wortes und des Bildes gebildet hast.

        Nun geht es weiter mit der nächsten Aufgabe, um das Gelernte noch weiter zu vertiefen.
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            text = """Great, you have now seen all 128 word-image pairs and tried to memorize as many as possible by forming a mental image of each word and image.
            Now move on to the next task to consolidate what you have learned. """
  Routine instructions_part2_2
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    TextComponent text_2
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        Das waren jetzt 3 Beispieldurchgänge. Konntest du dir zu jedem Paar ein mentales Bild bilden?

        Die soeben gezeigten Wort-Bild Paaare gehören NICHT zu den Paaren, die du dir merken sollst.

        Im Folgenden werden dir nun alle Wort-Bild Paare gezeigt, von denen du dir so viele wie möglich merken sollst.

        Sobald du bereit bist können wir mit dem Experiment starten. Drücke eine beliebige Taste um zu starten.
    KeyboardComponent key_resp_3
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    CodeComponent code_3
      Code Type = Py
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      Begin Routine:
        if language == "english":
            text_2 = """These were 3 sample runs. Were you able to form a mental image for each shown pair?
            The word-picture pairs just shown are NOT among the pairs that you should memorize.
            You will now be shown all the word-picture pairs, of which you should memorize as many as possible.
            Press any button to start the experiment."""
  Routine startup_code
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    CodeComponent settings
      Code Type = Auto->JS
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      Begin Experiment:
        t_img_encoding = 0.5
        t_isi_encoding = 2.5
        t_buffer = 10
        image_size = 0.5
        t_fixation_cross = 1.5

        #breaks after 32 trials
        breaks_after_block = [0,1,2,3]

        n_encoding_trials_prac = 6
        n_encoding_trials = 128
        cross_color = (-1.0000, -1.0000, -1.0000)
        letter_height=0.03
        language = "german"

        trigger_img = {}
        trigger_img['dog'] = 1
        trigger_img['car']   = 2
        trigger_img['flower']   = 3
        trigger_img['face']   = 4

        trigger_break_start = 91
        trigger_break_stop = 92
        trigger_buf_start = 61
        trigger_buf_stop = 62
        trigger_encoding_sound0 = 30
        trigger_encoding_sound1 = 31
        trigger_fixation_pre1 = 81
        trigger_fixation_pre2 = 82

        # these get added depending on the trial
        # ie. Gesicht in localizer = 1, as cue = 11, as sequence=21
        trigger_base_val_encoding = 0
    CodeComponent startup
      Code Type = Auto->JS
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      Begin Experiment:
        import pandas as pd

        subj_id = expInfo['participant']

        df_encoding = pd.read_excel(f"C:/Users/elena/Nextcloud/Masterthesis_EMS-TMR/EMS-TMR-Experiment/sequences/{subj_id}_pairings.xlsx")
        df_encoding_prac = pd.read_excel (f"C:/Users/elena/Nextcloud/Masterthesis_EMS-TMR/EMS-TMR-Experiment/sequences/encoding_practice.xlsx")

        # set variables we will access later
        i_encoding = 0
        i_encoding_prac = 0
        i_block = 0

        #set sound to a different samplerate!!!
        encoding_word_prac = sound.Sound('A', stereo= True, hamming=True, secs=-1, sampleRate= 24000)
        encoding_word = sound.Sound('A', stereo= True, hamming=True, secs=-1, sampleRate= 24000)

        # set the number of repetitions we have
        n_encoding_trials = df_encoding.shape [0]
        print (n_encoding_trials)
        n_encoding_trials_prac = 3
        n_break_blocks = 4
        if PILOTING:
            n_encoding_trials = 5

        print('DUMMY TRIALS: subj_id is set to 0')

        # set variables we will access later
        i_encoding = 0
    CodeComponent function
      Code Type = Auto->JS
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      Begin Experiment:
        import os.path as osp
        def get_image_name(filename):
            return osp.splitext(osp.basename(filename))[0]
  Routine instructions_part2_1
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    TextComponent text_3
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        Um sich die Word-Bild Paare besser merken zu können stelle dir bitte ein Bild vor, welches sowohl das Word, als auch das Bild enthält.

        Beispiel:












        Drücke nun eine beliebige Taste, um mit einen Beispieldurchlauf zu starten.
    ImageComponent image_2
      image = stimuli/mentales Bild.png
      pos = (0, 0.0)
      size = (0.8, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    KeyboardComponent key_resp_4
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Experiment:
        if language == "english":
            instructions = """ In order to memorize the word-picture pairs better, please imagine a mental picture that contains both the word and the picture.
            Now press any key to start a practice run."""
  Routine word_stimuli_prac
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        df_trial_prac = df_encoding_prac.iloc[i_encoding_prac]
        print (df_trial_prac)

        #unterschiedliche Verben je nach Trial
        encoding_word_prac.setSound("stimuli/practice_encoding/" + df_trial_prac.word + ".mp3")
        print (df_trial_prac.word)

        encoding_word_prac.play() # play the sound
      End Routine:
        encoding_word_prac.stop()
    SoundComponent encoding_word_prac
      sound [set every repeat] = $"stimuli/practice_encoding/" + df_trial_prac.word + ".mp3"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine image_stimuli_prac
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  Routine image_stimuli_prac_2
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    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        df_trial_prac = df_encoding_prac.iloc[i_encoding_prac]
        print (df_trial_prac)


        encoding_img_prac.image = "stimuli/" + df_trial_prac.image
      End Routine:
        i_encoding_prac += 1
    ImageComponent encoding_img_prac
      image = stimuli/practice_encoding/dogxxx.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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  Routine break_2
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    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        print ("start break")
        if language == "english":
            text_4.text = """<short break>
            Please take a short breather.
            Press any button if you want to continue with the next block."""
      End Routine:
        print ("break ended")
        core.wait(0.01)  # wait so trigger can reset
    KeyboardComponent key_resp_5
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    TextComponent text_4
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = letter_height
      startVal [time (s)] = 0.0
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      text:
        Eine kurze Pause.

        Bitte nimm eine kurze Verschnaufpause. Sobald du dich wieder bereit fühlst, drücke bitte eine beliebige Taste, um mit der Aufgabe fortzufahren.
  Routine counting_code
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    CodeComponent code_11
      Code Type = Py
      Begin Routine:
        i_block = break_blocks.thisN
Flow
  Routine startup_code
  Routine instructions_part2
  Routine instructions_part2_1
  LoopInitiator encoding_trials_prac loopType="TrialHandler"
    loopType = sequential
    nReps = n_encoding_trials_prac
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    Routine fixation_cross
    Routine word_stimuli_prac
    Routine image_stimuli_prac_2
  LoopTerminator encoding_trials_prac
  Routine instructions_part2_2
  LoopInitiator break_blocks loopType="TrialHandler"
    loopType = random
    nReps = n_break_blocks
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    Routine counting_code
    LoopInitiator encoding_trials loopType="TrialHandler"
      loopType = random
      nReps = n_encoding_trials
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      Routine fixation_cross
      Routine word_stimuli
      Routine image_stimuli
    LoopTerminator encoding_trials
    LoopInitiator break_conditional loopType="TrialHandler"
      loopType = random
      nReps = n_break_conditional
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      Routine break_2
    LoopTerminator break_conditional
  LoopTerminator break_blocks
  Routine instruction_end
